PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [700, 400]
  expName = sdt
  keyboardBackend = ioHub
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Routines
  Routine trial
    GratingComponent grating
      contrast [set every repeat] = contrast_val
      mask = gauss
      ori = 10
      sf = 5
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.05
      tex = sin
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    NoiseStimComponent noise2
      contrast = 0.5
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = gauss
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.000625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Uniform
      sf = None
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    NoiseStimComponent noise
      contrast = 0.5
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = gauss
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.000625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Normal
      sf = None
      size = (0.6, 0.6)
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = 0.1
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    KeyboardComponent key_resp
      allowedKeys = 'p','a'
      correctAns = corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.15
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_sdt.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'contrast_val': 0, 'corrAns': 'a'},
      {'contrast_val': 0.1, 'corrAns': 'p'}]
    Routine trial
  LoopTerminator trials
